<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="125" y="125" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>61763</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="14.5" TargetVolume="29"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="14.0" TargetVolume="28"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="2.0" TargetSurface="25"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="2.0" TargetSurface="25"/>
   </Plugin>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">17</Energy>
      <Energy Type1="1" Type2="1">24</Energy>
      <Energy Type1="1" Type2="2">1</Energy>
      <Energy Type1="Medium" Type2="2">6</Energy>
      <Energy Type1="2" Type2="2">29</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="0" Type="1"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.0526528628302</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.454989213357</GlobalDecayConstant>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="1">16.504112028</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>100</ncells>
      <seed>273667</seed>
   </Steppable>
</CompuCell3D>
